PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = lexical_decision_task
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Routines
  Routine Instructions
    TextComponent instructions
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 1.0
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      text:
        In this task you will be required to judge whether a string of letters is a word or a non-word.

        Press left arrow key for non-words and right arrow key for words.

        Please respond as quickly as possible.

        Press space to continue.
    KeyboardComponent key_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1
      text [set every repeat] = $words
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    KeyboardComponent response
      allowedKeys = 'right', 'left'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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  Routine End
    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        This is the end of the experiment.

        Thank you for your time.
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = experimental_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('words', 'way'), ('number_of_letters', 3), ('corrAns', 'right')]),
      OrderedDict([('words', 'woy'), ('number_of_letters', 3), ('corrAns', 'left')]),
      OrderedDict([('words', 'and'), ('number_of_letters', 3), ('corrAns', 'right')]),
      OrderedDict([('words', 'anf'), ('number_of_letters', 3), ('corrAns', 'left')]),
      OrderedDict([('words', 'new'), ('number_of_letters', 3), ('corrAns', 'right')]),
      OrderedDict([('words', 'neu'), ('number_of_letters', 3), ('corrAns', 'left')]),
      OrderedDict([('words', 'for'), ('number_of_letters', 3), ('corrAns', 'right')]),
      OrderedDict([('words', 'fot'), ('number_of_letters', 3), ('corrAns', 'left')]),
      OrderedDict([('words', 'out'), ('number_of_letters', 3), ('corrAns', 'right')]),
      OrderedDict([('words', 'ous'), ('number_of_letters', 3), ('corrAns', 'left')]),
      OrderedDict([('words', 'want'), ('number_of_letters', 4), ('corrAns', 'right')]),
      OrderedDict([('words', 'wunt'), ('number_of_letters', 4), ('corrAns', 'left')]),
      OrderedDict([('words', 'much'), ('number_of_letters', 4), ('corrAns', 'right')]),
      OrderedDict([('words', 'mech'), ('number_of_letters', 4), ('corrAns', 'left')]),
      OrderedDict([('words', 'play'), ('number_of_letters', 4), ('corrAns', 'right')]),
      OrderedDict([('words', 'ptay'), ('number_of_letters', 4), ('corrAns', 'left')]),
      OrderedDict([('words', 'hour'), ('number_of_letters', 4), ('corrAns', 'right')]),
      OrderedDict([('words', 'heur'), ('number_of_letters', 4), ('corrAns', 'left')])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
    Routine Trial
  LoopTerminator trials
  Routine End
