PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1680, 1050]
  expName = test_posner
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Routines
  Routine trial
    PolygonComponent triangle
      fillColor = $[1,1,1]
      nVertices = 3
      ori [set every repeat] = cueOri
      shape = triangle
      size = (2, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    PolygonComponent box
      fillColor = SeaGreen
      lineColor = MediumSeaGreen
      pos [set every repeat] = (targetX, 0)
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1
      storeCorrect = True
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  Routine fix
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import random
      Begin Routine:
        duration_fixation = random.randint(500,1500)/1000
        #in this example, it picks a random integer between 500
        #and 1,500 (ms) and divides it by 1,000 to get the time in seconds.
    PolygonComponent fix_cross
      fillColor = $[1,1,1]
      nVertices = 2
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $duration_fixation
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  Routine feedback
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.keys == corrAns:
            msg="Correct"
            color_feed = "green"
        elif not key_resp.keys:
            msg="You did not press"
            color_feed = "red"
        elif key_resp.keys != corrAns:
            msg = "Wrong"
            color_feed = "red"
    TextComponent feed_text
      color [set every repeat] = $color_feed
      letterHeight = 3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $msg
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Flow
  LoopInitiator loop_trials loopType="TrialHandler"
    conditionsFile = Posner_cueing.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'valid': 1, 'corrAns': 'right', 'cueOri': 90, 'targetX': 7, 'cueSide': 'right'},
      {'valid': 1, 'corrAns': 'right', 'cueOri': 90, 'targetX': 7, 'cueSide': 'right'},
      {'valid': 1, 'corrAns': 'right', 'cueOri': 90, 'targetX': 7, 'cueSide': 'right'},
      {'valid': 1, 'corrAns': 'right', 'cueOri': 90, 'targetX': 7, 'cueSide': 'right'},
      {'valid': 1, 'corrAns': 'left', 'cueOri': -90, 'targetX': -7, 'cueSide': 'left'},
      {'valid': 1, 'corrAns': 'left', 'cueOri': -90, 'targetX': -7, 'cueSide': 'left'},
      {'valid': 1, 'corrAns': 'left', 'cueOri': -90, 'targetX': -7, 'cueSide': 'left'},
      {'valid': 1, 'corrAns': 'left', 'cueOri': -90, 'targetX': -7, 'cueSide': 'left'},
      {'valid': 0, 'corrAns': 'right', 'cueOri': -90, 'targetX': 7, 'cueSide': 'left'},
      {'valid': 0, 'corrAns': 'left', 'cueOri': 90, 'targetX': -7, 'cueSide': 'right'}]
    Routine fix
    Routine trial
    Routine feedback
  LoopTerminator loop_trials
