PsychoPy2experiment version="2020.1.2"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=23F584EF
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  expName = StroopExperiment
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Routines
  Routine trial
    TextComponent target
      color [set every repeat] = $colour
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4
      text [set every repeat] = $word
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    KeyboardComponent response
      allowedKeys = 'left','right','down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine instructions
    CodeComponent align_text
      Code Type = Both
      Begin JS Routine:
        instrText.setAlignHoriz("center");
    TextComponent instrText
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!
        This task is quick and simple.
        Please pay full attention and try to respond as fast and as accurate as possible.

        You will see words flashing on the screen.
        YOur task is to indicate the colours of the letters, ignoring the word.

        You will need your keyboard to respond:

        left arrow = red
        down arrow = green
        righ = blue

        Please take a moment to remember this, as it will not be repeated.

        Again, respond according to the colors of the LETTERS, and IGNORE the meaning of the word.

        Thank you for your time.


        (This study is not part of a research project and is only used for educational purposes.)
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine vary_timings
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # modulo division; remainder 1 for odd, 0 for even

        remainder = int(expInfo["participant"]) % 2

        if remainder == 1:  # odd participant IDs
            time_visible = 0.5
        else:  # even participant IDs
            time_visible = 1.0
  Routine feedback
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        #stored on last run routine
        if response.corr:
            f_msg="Correct!"
            f_color="green"
        else:
            f_msg="Oops! That was wrong"
            f_color="red"
    TextComponent feedback_stim
      color [set every repeat] = $f_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $f_msg
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [OrderedDict([('word', 'red'), ('colour', 'red'), ('congruent', 1), ('corrAns', 'left')]),
      OrderedDict([('word', 'red'), ('colour', 'green'), ('congruent', 0), ('corrAns', 'down')]),
      OrderedDict([('word', 'green'), ('colour', 'green'), ('congruent', 1), ('corrAns', 'down')]),
      OrderedDict([('word', 'green'), ('colour', 'blue'), ('congruent', 0), ('corrAns', 'right')]),
      OrderedDict([('word', 'blue'), ('colour', 'blue'), ('congruent', 1), ('corrAns', 'right')]),
      OrderedDict([('word', 'blue'), ('colour', 'red'), ('congruent', 0), ('corrAns', 'left')])]
    Routine trial
    Routine feedback
  LoopTerminator trials
